PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = posner
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent cue
      image = images/arrow-left.png
      ori [set every repeat] = cueOri
      size = (0.20, 0.20)
      startVal [time (s)] = 1
      stopVal [duration (s)] = 0.5
      units = height
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    ImageComponent target
      image = images/circle_red.png
      pos [set every repeat] = [targetX, 0]
      size = (0.20, 0.20)
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      stopVal [duration (s)] = 1.5
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('targetX', -0.5), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
      OrderedDict([('targetX', 0.5), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
      OrderedDict([('targetX', -0.5), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
      OrderedDict([('targetX', 0.5), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
      OrderedDict([('targetX', -0.5), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
      OrderedDict([('targetX', 0.5), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
      OrderedDict([('targetX', -0.5), ('cueOri', 0), ('congr', 1), ('corrAns', 'left')]),
      OrderedDict([('targetX', 0.5), ('cueOri', 180), ('congr', 1), ('corrAns', 'right')]),
      OrderedDict([('targetX', -0.5), ('cueOri', 180), ('congr', 0), ('corrAns', 'left')]),
      OrderedDict([('targetX', 0.5), ('cueOri', 0), ('congr', 0), ('corrAns', 'right')])]
    Routine trial
  LoopTerminator trials
